PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = visneuro_demo
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press the left arrow key for gorillas, the right arrow key for hedgehogs and the up arrow key for kittens.

        Press the space bar when you are ready.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_2
    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size = [1, 1]
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    KeyboardComponent key_resp_3
      correctAns = $correct_ans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'left','right','up'
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images/datafile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'correct_ans': u'left', u'images': u'gorilla_face.jpeg'},
      {u'correct_ans': u'left', u'images': u'gorilla_fat.jpeg'},
      {u'correct_ans': u'left', u'images': u'gorilla_tongue.jpeg'},
      {u'correct_ans': u'right', u'images': u'cat_eyes.jpeg'},
      {u'correct_ans': u'right', u'images': u'ear_muffs_cat.jpeg'},
      {u'correct_ans': u'right', u'images': u'rat_cat.jpeg'},
      {u'correct_ans': u'up', u'images': u'egg_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'icecream_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'marshmallow_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'santa_hog.jpeg'}]
    Routine trial_2
  LoopTerminator trials
